begin model

#@title: Amyloid-beta on-pathway aggregation (Rana et al., 2020)

#@description: |
#  On-pathway-only reduction of the Rana et al. (2020) competing-pathway model: the
#  reactions of Eq. 4 alone, which is the sub-model the paper fits to the fatty
#  acid-free experiment. Monomer adds stepwise to a growing oligomer
#  (A_i + A_1 <-> A_i+1, i = 1..11) up to the 12-mer nucleus A_12, identified with
#  the fibril F, which then takes up oligomers catalytically (A_i + F <-> F). All
#  kinetics are mass action; the thioflavin T signal is map_on*F.
#  With 25 uM monomer and no fatty acid the eleven sequential nucleation steps have
#  to be traversed before any fibril exists, so the fibril trace is flat for ~28 h,
#  rises steeply between 30 and 42 h as the chain empties into A_12, and plateaus
#  once free monomer is exhausted -- the classical nucleation-dependent sigmoid.

#@keyword: |
#  protein aggregation, amyloid-beta, Alzheimer disease, competing pathways,
#  nucleation-elongation, fatty acid micelle, pathway switching, mass action,
#  lag phase, sigmoidal kinetics, Homo sapiens

#@reference: |
#  Rana P, Bose P, Vaidya A, Rangachari V, Ghosh P (2020). Global fitting and
#  parameter identifiability for amyloid-beta aggregation with competing
#  pathways. 2020 IEEE 20th International Conference on BioInformatics and
#  BioEngineering (BIBE), pp. 73-78. doi:10.1109/BIBE50027.2020.00020
#
#  Source of the ThT data reproduced here:
#  Ghosh P, Rana P, Rangachari V, Saha J, Steen E, Vaidya A (2020). A game
#  theoretic approach to deciphering the dynamics of amyloid-beta aggregation
#  along competing pathways. R Soc Open Sci 7(8):191814. doi:10.1098/rsos.191814

#@note: |
#  PARAMETER PROVENANCE. Rana et al. (2020) specify the reaction network completely
#  (Eq. 4, Eq. 5 and the flux equations), but Table I tabulates only eight of the
#  thirteen rate constants: k_fbon, k_fbon_, k_con_, k_fboff_ and k_swi_ are never
#  given, and neither is the pseudo-micelle concentration or the size of the
#  addition/removal spikes. The tabulated values also cannot be used as they stand:
#  at the peptide concentration the paper reports (25 uM), the On-Pathway column
#  (k_nuon 22.04 /uM/h, k_nuon_ 12.72 /h) drives the whole nucleation chain to
#  equilibrium within ~0.03 h, which leaves no slow variable and therefore no lag
#  phase, whereas Fig. 1a shows a ~28 h lag. The values here were therefore obtained
#  by refitting this network to the ThT traces digitized from Fig. 1, which is the
#  paper's own procedure; see reference/ and the PyBNF job setups under
#  pybnf-jobs/Rana-2020/. verify_rana2020.ipynb reports both the agreement with the
#  digitized data and the comparison against Table I.
#
#  RULE ENUMERATION. The oligomer size is a BNGL state label, and state labels are
#  opaque tokens that cannot be incremented, so each step of the A_1..A_12 and
#  A'_4..A'_12 chains is written as its own rule. The model is therefore explicit
#  rather than generative; this is a faithful transcription of an ODE model, not a
#  combinatorial rule-based one.
#
#  MASS BALANCE. Total peptide is not conserved, by construction: the published
#  fibril-binding reaction A_i + F <-> F consumes an i-mer without enlarging F, and
#  its reverse emits an i-mer from F. Fibril mass is not a state variable of the
#  published model and is not added here.
#
#  ODE ONLY. 25 uM in a 100 uL well is 1.5e15 molecules, so stochastic simulation of
#  this model is not computationally feasible and no ssa/psa/nfr protocol is given.
#  The assay is a bulk in-vitro measurement for which the deterministic limit is the
#  intended interpretation.

begin parameters
  # Constants for conversion to a population-based (molecule-count) unit system.
  # V_ref is a 100 uL plate well, the format in which the ThT assays of Rana
  # et al. (2020) are read.
  NA     6.02214076e23  # molecules/mol
  V_ref  1e-4           # L/well

  # 25 uM Abeta42 is the peptide concentration stated in Sec. II-A of Rana
  # et al. (2020).
  Abeta_0      25  # uM

  # On-pathway nucleation, A_i + A_1 <-> A_i+1; see Eq. 4 and flux H_i in
  # Rana et al. (2020).
  k_nuon   3.66768  # /uM/h
  k_nuon_  82.1423  # /h

  # On-pathway fibril binding, A_i + F <-> F; see Eq. 4 and flux I_i in
  # Rana et al. (2020). F is the 12-mer nucleus, A_12.
  k_fbon   6.7244  # /uM/h
  k_fbon_  9.98968  # /h

  # Thioflavin T mapping constants. Rana et al. (2020) write the measured signal
  # as signal_on + signal_off and fit an off-pathway mapping constant (map' in
  # Sec. IV-B, k_off / k_off1 / k_off2 in Table I) over 10^0-10^5.
  map_on   8.66927  # a.u./uM
end parameters

begin molecule types
  # Abeta42 on-pathway oligomer of size n monomers. Ab(p~on,n~12) is the
  # 12-mer nucleus, which Rana et al. (2020) identify with the fibril F.
  # The p component is retained so that this file and the competing-pathway
  # files share one molecule-type declaration.
  Ab(p~on~off,n~1~2~3~4~5~6~7~8~9~10~11~12)
end molecule types

begin seed species
  Ab(p~on,n~1)  Abeta_0  # uM
end seed species

begin observables
  # On-pathway oligomers A_1..A_11.
  Molecules  Obs_A1  Ab(p~on,n~1)
  Molecules  Obs_A2  Ab(p~on,n~2)
  Molecules  Obs_A3  Ab(p~on,n~3)
  Molecules  Obs_A4  Ab(p~on,n~4)
  Molecules  Obs_A5  Ab(p~on,n~5)
  Molecules  Obs_A6  Ab(p~on,n~6)
  Molecules  Obs_A7  Ab(p~on,n~7)
  Molecules  Obs_A8  Ab(p~on,n~8)
  Molecules  Obs_A9  Ab(p~on,n~9)
  Molecules  Obs_A10  Ab(p~on,n~10)
  Molecules  Obs_A11  Ab(p~on,n~11)

  # On-pathway 12-mer: the nucleus, identified with the fibril F.
  Molecules  Obs_F  Ab(p~on,n~12)
end observables

begin functions
  # Thioflavin T signal. Rana et al. (2020) report the measured trace as the sum
  # of an on-pathway and an off-pathway contribution; the cross-beta-rich
  # species are the on-pathway fibril F and the off-pathway aggregate F'_1.
  ThT_on()     = map_on*Obs_F

  # Dimensional conversions (uncomment for molecule-count output)
# F_count()    = Obs_F*1e-6*NA*V_ref  # molecules/well
end functions

begin reaction rules
  # --- On pathway, Eq. 4 in Rana et al. (2020) ---

  # Nucleation by monomer addition, A_i + A_1 <-> A_i+1 (flux H_i). Forward and
  # reverse are written as separate rules because the reverse of a
  # molecule-deleting rule is a molecule-synthesizing rule.
  R_nuon_1_f: Ab(p~on,n~1) + Ab(p~on,n~1) -> Ab(p~on,n~2)  k_nuon
  R_nuon_1_r: Ab(p~on,n~2) -> Ab(p~on,n~1) + Ab(p~on,n~1)  k_nuon_
  R_nuon_2_f: Ab(p~on,n~2) + Ab(p~on,n~1) -> Ab(p~on,n~3)  k_nuon
  R_nuon_2_r: Ab(p~on,n~3) -> Ab(p~on,n~2) + Ab(p~on,n~1)  k_nuon_
  R_nuon_3_f: Ab(p~on,n~3) + Ab(p~on,n~1) -> Ab(p~on,n~4)  k_nuon
  R_nuon_3_r: Ab(p~on,n~4) -> Ab(p~on,n~3) + Ab(p~on,n~1)  k_nuon_
  R_nuon_4_f: Ab(p~on,n~4) + Ab(p~on,n~1) -> Ab(p~on,n~5)  k_nuon
  R_nuon_4_r: Ab(p~on,n~5) -> Ab(p~on,n~4) + Ab(p~on,n~1)  k_nuon_
  R_nuon_5_f: Ab(p~on,n~5) + Ab(p~on,n~1) -> Ab(p~on,n~6)  k_nuon
  R_nuon_5_r: Ab(p~on,n~6) -> Ab(p~on,n~5) + Ab(p~on,n~1)  k_nuon_
  R_nuon_6_f: Ab(p~on,n~6) + Ab(p~on,n~1) -> Ab(p~on,n~7)  k_nuon
  R_nuon_6_r: Ab(p~on,n~7) -> Ab(p~on,n~6) + Ab(p~on,n~1)  k_nuon_
  R_nuon_7_f: Ab(p~on,n~7) + Ab(p~on,n~1) -> Ab(p~on,n~8)  k_nuon
  R_nuon_7_r: Ab(p~on,n~8) -> Ab(p~on,n~7) + Ab(p~on,n~1)  k_nuon_
  R_nuon_8_f: Ab(p~on,n~8) + Ab(p~on,n~1) -> Ab(p~on,n~9)  k_nuon
  R_nuon_8_r: Ab(p~on,n~9) -> Ab(p~on,n~8) + Ab(p~on,n~1)  k_nuon_
  R_nuon_9_f: Ab(p~on,n~9) + Ab(p~on,n~1) -> Ab(p~on,n~10)  k_nuon
  R_nuon_9_r: Ab(p~on,n~10) -> Ab(p~on,n~9) + Ab(p~on,n~1)  k_nuon_
  R_nuon_10_f: Ab(p~on,n~10) + Ab(p~on,n~1) -> Ab(p~on,n~11)  k_nuon
  R_nuon_10_r: Ab(p~on,n~11) -> Ab(p~on,n~10) + Ab(p~on,n~1)  k_nuon_
  R_nuon_11_f: Ab(p~on,n~11) + Ab(p~on,n~1) -> Ab(p~on,n~12)  k_nuon
  R_nuon_11_r: Ab(p~on,n~12) -> Ab(p~on,n~11) + Ab(p~on,n~1)  k_nuon_

  # Fibril binding, A_i + F <-> F (flux I_i). The fibril is catalytic: it takes up
  # an oligomer without changing its own count, which is how Rana et al. (2020)
  # write the reaction and the flux.
  R_fbon_1_f: Ab(p~on,n~1) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_1_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~1)  k_fbon_
  R_fbon_2_f: Ab(p~on,n~2) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_2_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~2)  k_fbon_
  R_fbon_3_f: Ab(p~on,n~3) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_3_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~3)  k_fbon_
  R_fbon_4_f: Ab(p~on,n~4) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_4_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~4)  k_fbon_
  R_fbon_5_f: Ab(p~on,n~5) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_5_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~5)  k_fbon_
  R_fbon_6_f: Ab(p~on,n~6) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_6_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~6)  k_fbon_
  R_fbon_7_f: Ab(p~on,n~7) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_7_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~7)  k_fbon_
  R_fbon_8_f: Ab(p~on,n~8) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_8_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~8)  k_fbon_
  R_fbon_9_f: Ab(p~on,n~9) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_9_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~9)  k_fbon_
  R_fbon_10_f: Ab(p~on,n~10) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_10_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~10)  k_fbon_
  R_fbon_11_f: Ab(p~on,n~11) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_11_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~11)  k_fbon_
end reaction rules

end model

begin actions
  generate_network({overwrite=>1})  # 12 species, 44 reactions

  # On pathway: 25 uM Abeta42, no fatty acid

  #@protocol: |
  #  Fibril formation from monomer alone. Expect a flat lag phase to
  #  ~28 h, a steep rise between 30 and 42 h, and a plateau by 45 h.

  #@figure: Fig. 1a in Rana et al. (2020)

  simulate({method=>"ode",suffix=>"ode",t_start=>0,t_end=>50,\
    n_steps=>1000,print_functions=>1})
end actions
