# lambda_switch_arkin1998_fullcircuit_exact.bngl
#
# PAPER-EXACT variant of lambda_switch_arkin1998_fullcircuit.bngl (issue #6). Identical to
# the decision-level full circuit EXCEPT it closes the two fidelity gaps that move the
# Arkin, Ross & McAdams (1998) reported numbers:
#
#   (1) CELL GROWTH + DILUTION (Table 3): V(t)=(1+k0*t)*1e-15 L, k0=4.76e-4/s, volume
#       doubling over the 35-min cell cycle. Network-free BNGL has no simulation-time
#       variable (BNG2.pl aborts on `time` in a function), so V(t) is carried by a
#       VOLUME-PROXY CLOCK species Vol(): a buffered Src() drives Src()->Src()+Vol() at
#       k0*Vol0, so Obs_Vol/Vol0 = 1+k0*t = V(t)/V_ref = g(t). Growth dilution is then a
#       first-order 'decay' X()->0 on every PHAGE species at the exact linear-growth
#       specific rate mu(t)=k0/g(t)=k_grow/Obs_Vol (so a stable species halves exactly at
#       volume doubling). Host/buffered pools (RNAP, P1, P2) and the non-replicating
#       O-/P- genome DNA() are held at constant concentration (constant count) and are NOT
#       diluted. This pulls the Fig-3a Cro2 plateau down from the constant-volume ~80 nM
#       toward the paper's ~55 nM. (Concentration-space bimolecular rate constants are
#       volume-independent, and fast dimer re-equilibration reproduces the extra dimer
#       drop, so forward bimolecular rates are NOT separately rescaled by 1/V.)
#
#   (2) ANTITERMINATION SATURATION (Table 2): the nut sites are now a SLOW step with
#       REVERSIBLE N loading, replacing the one-way functional antitermination. An RNAP
#       that reaches nutR/nutL is intercepted into a paused state (at~n); from there it
#       either escapes un-antiterminated at k23=5 nt/s (slow -- the paper's key dwell) or
#       loads N at k24*[N] (k24=0.145) into at~m, which reverses at k25=0.1/s and escapes
#       antiterminated at k26=30 nt/s. Per-pass antitermination is thus 0.145N/(0.145N+5)
#       -- ~6x stronger than the old 0.145N/(0.145N+30), because the escape it competes
#       with is the slow nut step, not the fast generic 30 nt/s step. This restores the
#       Fig-6a onset to MOI>3 (the old model's weaker per-pass antiterm put it at 4->5).
#       tR1 (50%) / tL1 (~80%) terminator fall-off fractions and free readthrough of the
#       antiterminated (at~a) RNAP are already exact in the base model and are unchanged.
#
# Translation stays the geometric-burst competition (mean 10; deprioritized item #6). The
# full per-nt elongation and Erlang cross-check remain out of scope for this variant.
# Run this file with RULEMONKEY, not NFsim (issue #39). writeXML as for the base
# model, but the two samplers do NOT agree here, and the cause is an NFsim defect
# rather than the model (lanl/bngsim#195): a rule whose reactant pattern is SYMMETRIC and whose
# rate is a FUNCTION, NFsim does not divide out the pattern automorphism and fires
# at twice the intended rate. Rdil_CI2 and Rdil_Cro2 below are exactly that shape
# (CI(d!1).CI(d!1) -> 0 mu_dil()), so under NFsim the CI2/Cro2 dimers are diluted
# at 2x, Shea-Ackers repression at P_R/P_L weakens and transcription rises: 100
# seeds/engine at MOI 4 and 6 put NFsim free-N ~30% high (combined endpoint z=+3.4)
# and the dimers ~15% low, the same direction at both MOIs, where a same-engine
# null gives |z|<=1.9. `run_fullcircuit.py symcheck` reproduces the defect in one
# minute on a three-species model and is the re-check to run after a bngsim
# upgrade; RuleMonkey reproduces the analytic dilution solution to 0.5%, and every
# committed artifact in reference/ is RuleMonkey.
#
# --- base-model header follows ---
# (was) lambda_switch_arkin1998_fullcircuit.bngl
#
# FULL lysis/lysogeny decision circuit of bacteriophage lambda, after
#   Arkin, Ross & McAdams (1998), Genetics 149:1633-1648.
#
# This is the complete closed-loop, NETWORK-FREE reconstruction (run with NFsim or
# RuleMonkey), the genetic-circuit companion to the curated non-genetic network in
# lambda_switch_arkin1998.bngl (Table 3, R1-R5) and the Shea-Ackers promoter
# activation in lambda_switch_arkin1998_promoters.bngl (Table 1). It couples:
#
#   TRANSCRIPTION (four operons P_R, P_L, P_RM, P_RE) as a state-increment ("~PLUS")
#     RNAP-position model: one generic stepping rule per operon advances loc~? by one
#     nt-equivalent; N-antitermination at nutR/nutL (unimolecular functional rate
#     k_anti*N) and terminator fall-off at tR1 (~50%) / tL1 (~80%) compete with the
#     step; gene stops emit mRNA. Initiation propensities are the Shea-Ackers open-
#     complex rates A_PR()/A_PRM() (40-config O_R partition function, Table 1/2) and
#     A_PRE()/A_PL() (Table 1), evaluated live from the current repressor levels.
#   TRANSLATION as a geometric-burst competition per transcript (mean 10 proteins,
#     Arkin Table 2 / assumption 8): mRNA_X -> mRNA_X + X at k_tl=2.0/s vs
#     mRNA_X -> 0 at k_rnase=0.2/s.
#   PROTEIN TURNOVER R1-R5 (Table 3): CI/Cro dimerization+degradation, N decay, and
#     CII/CIII competitive proteolysis by two host proteases (P1=35, P2=140 nM) with
#     CIII protection of CII -- verbatim from lambda_switch_arkin1998.bngl.
#
# The four promoters are read from the LIVE proteins the circuit produces, closing the
# feedback loop: A_PR/A_PRM/A_PL <- CI2 & Cro2 dimers; A_PRE <- free CII; antiterm <- N.
#
# MOI (multiplicity of infection = phage genome copies) is the parameter MOI (default
# 6, the Arkin Fig 3-5 value). Initiation is catalytic on a shared genome species
# DNA() seeded at MOI: DNA() -> DNA() + RNAP(...) A_X(), so total initiation for
# operon X is A_X()*MOI (each genome copy equilibrates with the shared free-repressor
# / free-RNAP pools -- standard Shea-Ackers). MOI=1 reduces to a single genome.
# Free RNAP (30 nM), ribosomes, and proteases are constant buffered pools (Arkin
# modeling assumptions 3 & 6). Cell growth/dilution is not modeled (constant volume;
# 1 molecule ~ 1 nM at V_ref=1.66054e-15 L, so molecule counts read as nM).
#
# NETWORK-FREE ENGINE NOTE (important): the promoter functional rates are driven by
# MOLECULES-type observables of the dimers -- Obs_CI2/Obs_Cro2 = Molecules
# CI(d!1).CI(d!1) / Cro(d!1).Cro(d!1) = 2x the dimer COUNT -- with dimer_scale=0.5 in
# the partition functions to recover the dimer concentration. NFsim silently FREEZES a
# functional rate that depends on a SPECIES-type observable (it refreshes such rates
# only at output times, not on reaction events; RuleWorld/nfsim#86), so the live
# repressor feedback MUST be read from Molecules obs. The Species readouts CI2_dimer /
# Cro2_dimer are for plotting (clean dimer count) and to keep NFsim complex bookkeeping
# (-cb) enabled; they never drive a rate.
#
# Lysogeny classifier (Arkin footnote 12, p.1639-1640): a cell is committed to lysogeny
# when free-CII production activated P_RE and [CI2] > [Cro2] at the end of the 35-min
# cell cycle. Run with the companion driver run_fullcircuit.py.
#
# Actions: writeXML only -- this is a network-free model. Generate XML with
#   `bionetgen run -i lambda_switch_arkin1998_fullcircuit.bngl`
# then simulate the XML with NFsim (needs -cb) or RuleMonkey; run_fullcircuit.py does
# this via bngsim and reproduces Arkin Figs 3 and 6.
#
# ENGINE CROSS-CHECK (issue #39): the two samplers are checked against each other on
# THIS file rather than assumed to agree -- `run_fullcircuit.py agreement 100` runs
# rejection-based NFsim against exact RuleMonkey on one XML with shared seeds and
# caches every per-seed trajectory to reference/<prefix>_agreement.npz. Each committed
# reference/<prefix>_*.npz records the engine that produced it; the Fig-3 and Fig-6
# caches are RuleMonkey.
#
# Generated from models/lambda_switch_arkin1998/generator/ (plus_gen.py ~PLUS generator +
# or_system.py / pre_pl.py Shea-Ackers rates + build_fullcircuit.py assembly).

begin model
begin parameters
  k_step 30.0
  k_comp 10000*k_step  # fast completion (boundary guard)
  k_emit 1000*k_step  # rate-separated gene-stop emission
  k_anti 0.145
  k_tl 2.0
  k_rnase 0.2
  RNAPf_m 30
  MOI 6
  k1 0.0007
  k2 0.05
  k3 0.5
  k4 0.0025
  k5 0.05
  k6 0.5
  k7 0.00231
  P1_tot 35.0
  k8 0.01
  k9 0.01
  k10 0.002
  k11 0.01
  k12 0.001
  k13 0.0001
  P2_tot 140.0
  k14 0.00025
  k15 0.065
  k16 0.6
  k17 0.01
  k18 0.01
  k19 0.001
  # OR site energies (kcal/mol); Arkin Table 1/2, Shea & Ackers 1985
  dGR1 -11.7
  dGR2 -10.1
  dGR3 -10.1
  dGC1 -10.8
  dGC2 -10.8
  dGC3 -12.1
  dG12 -1.9
  dG23 -2.0
  dG_Rp -12.5
  dG_RMp -11.5
  NA 6.02214076e23
  V_ref 1.66054e-15
  molec_to_M 1/(NA*V_ref)  # = 1e-9 M/molecule
  dimer_scale 0.5  # 1.0 clamp (dimer count) / 0.5 live Molecules dimer obs
  R_gas 1.9872e-3
  T_kelvin 310.15
  RT R_gas*T_kelvin
  # k_oc calibrated to Fig.2 peaks (P_R 0.013, P_RM 0.0063 OC/s; ratio 11)
  kPR 0.0136741
  kPRM1 0.0107315
  kPRM2 0.00097559
  # P_RE (CII activation) and P_L (Cro2/CI2 repression), Table 1
  dG_RE_2 -9.9
  dG_RE_3 -9.7
  dG_RE_4 -21.5
  koc_RE_2 4e-05
  koc_RE_4 0.015
  dG_L_2 -10.9
  dG_L_3 -12.1
  dG_L_4 -11.7
  dG_L_5 -10.1
  dG_L_6 -12.5
  dG_L_7 -22.9
  dG_L_8 -20.9
  dG_L_9 -22.8
  dG_L_10 -23.7
  koc_L_6 0.011
  k_fo_PR_tR1 1*k_step  # 50% terminate
  k_fo_PL_tL1 4*k_step  # 80% terminate
  # === issue #6 exact-variant additions ===
  # cell growth / dilution (Arkin Table 3): V(t)=(1+k0*t)*1e-15 L, doubles in 35 min
  k0 4.76e-4          # 1/2100 s; linear volume-growth rate constant
  Vol0 1000           # volume-proxy clock seed (Obs_Vol/Vol0 = V(t)/V_ref = 1+k0*t)
  k_grow k0*Vol0      # Src()->Src()+Vol() so d(Vol)/dt=k0*Vol0 -> Vol=Vol0*(1+k0*t)
  # antitermination nut mechanism (Arkin Table 2): slow nut step + reversible N loading
  k23 5.0             # un-antiterminated escape from nut (nt/s) -- the paper's slow dwell
  k24 0.145           # N loading rate (== old k_anti); f_load = k24*Obs_N
  k25 0.1             # N unloading rate (1/s)
  k26 30.0            # antiterminated escape from nut (nt/s)
  k_pause 1e5         # fast intercept: generic step must not skip the nut decision
end parameters
begin molecule types
  RNAP(op~PR~PL~PRM~PRE,loc~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26~27~28~29~30~31~32~33~34~35~36~37~38~39~40~41~42~43~44~45~46~47~48~49~50~51~52~53~54~55~56~57~58~59~60~61~62~63~64~65~66~67~68~69~70~71~72~73~74~75~76~77~78~79~80~81~82~83~84~85~86~87~88~89~90~91~92~93~94~95~96~97~98~99~100~101~102~103~104~105~106~107~108~109~110~111~112~113~114~115~116~117~118~119~120~121~122~123~124~125~126~127~128~129~130~131~132~133~134~135~136~137~138~139~140~141~142~143~144~145~146~147~148~149~150~151~152~153~154~155~156~157~158~159~160~161~162~163~164~165~166~167~168~169~170~171~172~173~174~175~176~177~178~179~180~181~182~183~184~185~186~187~188~189~190~191~192~193~194~195~196~197~198~199~200~201~202~203~204~205~206~207~208~209~210~211~212~213~214~215~216~217~218~219~220~221~222~223~224~225~226~227~228~229~230~231~232~233~234~235~236~237~238~239~240~241~242~243~244~245~246~247~248~249~250~251~252~253~254~255~256~257~258~259~260~261~262~263~264~265~266~267~268~269~270~271~272~273~274~275~276~277~278~279~280~281~282~283~284~285~286~287~288~289~290~291~292~293~294~295~296~297~298~299~300~301~302~303~304~305~306~307~308~309~310~311~312~313~314~315~316~317~318~319~320~321~322~323~324~325~326~327~328~329~330~331~332~333~334~335~336~337~338~339~340~341~342~343~344~345~346~347~348~349~350~351~352~353~354~355~356~357~358~359~360~361~362~363~364~365~366~367~368~369~370~371~372~373~374~375~376~377~378~379~380~381~382~383~384~385~386~387~388~389~390~391~392~393~394~395~396~397~398~399~400~401~402~403~404~405~406~407~408~409~410~411~412~413~414~415~416~417~418~419~420~421~422~423~424~425~426~427~428~429~430~431~432~433~434~435~436~437~438~439~440~441~442~443~444~445~446~447~448~449~450~451~452~453~454~455~456~457~458~459~460~461~462~463~464~465~466~467~468~469~470~471~472~473~474~475~476~477~478~479~480~481~482~483~484~485~486~487~488~489~490~491~492~493~494~495~496~497~498~499~500~501~502~503~504~505~506~507~508~509~510~511~512~513~514~515~516~517~518~519~520~521~522~523~524~525~526~527~528~529~530~531~532~533~534~535~536~537~538~539~540~541~542~543~544~545~546~547~548~549~550~551~552~553~554~555~556~557~558~559~560~561~562~563~564~565~566~567~568~569~570~571~572~573~574~575~576~577~578~579~580~581~582~583~584~585~586~587~588~589~590~591~592~593~594~595~596~597~598~599~600~601~602~603~604~605~606~607~608~609~610~611~612~613~614~615~616~617~618~619~620~621~622~623~624~625~626~627~628~629~630~631~632~633~634~635~636~637~638~639~640~641~642~643~644~645~646~647~648~649~650~651~652~653~654~655~656~657~658~659~660~661~662~663~664~665~666~667~668~669~670~671~672~673~674~675~676~677~678~679~680~681~682~683~684~685~686~687~688~689~690~691~692~693~694~695~696~697~698~699~700~701~702~703~704~705~706~707~708~709~710~711~712~713~714~715~716~717~718~719~720~721~722~723~724~725~726~727~728~729~730~731~732~733~734~735~736~737~738~739~740~741~742~743~744~745~746~747~748~749~750~751~752~753~754~755~756~757~758~759~760~761~762~763~764~765~766~767~768~769~770~771~772~773~774~775~776~777~778~779~780~781~782~783~784~785~786~787~788~789~790~791~792~793~794~795~796~797~798~799~800~801~802~803~804~805~806~807~808~809~810~811~812~813~814~815~816~817~818~819~820~821~822~823~824~825~826~827~828~829~830~831~832~833~834~835~836~837~838~839~840~841~842~843~844~845~846~847~848~849~850~851~852~853~854~855~856~857~858~859~860~861~862~863~864~865~866~867~868~869~870~871~872~873~874~875~876~877~878~879~880~881~882~883~884~885~886~887~888~889~890~891~892~893~894~895~896~897~898~899~900~901~902~903~904~905~906~907~908~909~910~911~912~913~914~915~916~917~918~919~920~921~922~923~924~925~926~927~928~929~930~931~932~933~934~935~936~937~938~939~940~941~942~943~944~945~946~947~948~949~950~951~952~953~954~955~956~957~958~959~960~961~962~963~964~965~966~967~968~969~970~971~972~973~974~975~976~977~978~979~980~981~982~983~984~985~986~987~988~989~990~991~992~993~994~995~996~997~998~999~1000~1001~1002~1003~1004~1005~1006~1007~1008~1009~1010~1011~1012~1013~1014~1015~1016~1017~1018~1019~1020~1021~1022~1023~1024~1025~1026~1027~1028~1029~1030~1031~1032~1033~1034~1035~1036~1037~1038~1039~1040~1041~1042~1043~1044~1045~1046~1047~1048~1049~1050~1051~1052~1053~1054~1055~1056~1057~1058~1059~1060~1061~1062~1063~1064~1065~1066~1067~1068~1069~1070~1071~1072~1073~1074~1075~1076~1077~1078~1079~1080~1081~1082~1083~1084~1085~1086~1087~1088~1089~1090~1091~1092~1093~1094~1095~1096~1097~1098~1099~1100~1101~1102~1103~1104~1105~1106~1107~1108~1109~1110~1111~1112~1113~1114~1115~1116~1117~1118~1119~1120~1121~1122~1123~1124~1125~1126~1127~1128~1129~1130~1131~1132~1133~1134~1135~1136~1137~1138~1139~1140~1141~1142~1143~1144~1145~1146~1147~1148~1149~1150~1151~1152~1153~1154~1155~1156~1157~1158~1159~1160~1161~1162~1163~1164~1165~1166~1167~1168~1169~1170~1171~1172~1173~1174~1175~1176~1177~1178~1179~1180~1181~1182~1183~1184~1185~1186~1187~1188~1189~1190~1191~1192~1193~1194~1195~1196~1197~1198~1199~1200~1201~1202~1203~1204~1205~1206~1207~1208~1209~1210~1211~1212~1213~1214~1215~1216~1217~1218~1219~1220~1221~1222~1223~1224~1225~1226~1227~1228~1229~1230~1231~1232~1233~1234~1235~1236~1237~1238~1239~1240~1241~1242~1243~1244~1245~1246~1247~1248~1249~1250~1251~1252~1253~1254~1255~1256~1257~1258~1259~1260~1261~1262~1263~1264~1265~1266~1267~1268~1269~1270~1271~1272~1273~1274~1275~1276~1277~1278~1279~1280~1281~1282~1283~1284~1285~1286~1287~1288~1289~1290~1291~1292~1293~1294~1295~1296~1297~1298~1299~1300~1301~1302~1303~1304~1305~1306~1307~1308~1309~1310~1311~1312~1313~1314~1315~1316~1317~1318~1319~1320~1321~1322~1323~1324~1325~1326~1327~1328~1329~1330~1331~1332~1333~1334~1335~1336~1337~1338~1339~1340~1341~1342~1343~1344~1345~1346~1347~1348~1349~1350~1351~1352~1353~1354~1355~1356~1357~1358~1359~1360~1361~1362~1363~1364~1365~1366~1367~1368~1369~1370~1371~1372~1373~1374~1375~1376~1377~1378~1379~1380~1381~1382~1383~1384~1385~1386~1387~1388~1389~1390~1391~1392~1393~1394~1395~1396~1397~1398~1399~1400~1401~1402~1403~1404~1405~1406~1407~1408~1409~1410~1411~1412~1413~1414~1415~1416~1417~1418~1419~1420~1421~1422~1423~1424~1425~1426~1427~1428~1429~1430~1431~1432~1433~1434~1435~1436~1437~1438~1439~1440~1441~1442~1443~1444~1445~1446~1447~1448~1449~1450~1451~1452~1453~1454~1455~1456~1457~1458~1459~1460~1461~1462~1463~1464~1465~1466~1467~1468~1469~1470~1471~1472~1473~1474~1475~1476~1477~1478~1479~1480~1481~1482~1483~1484~1485~1486~1487~1488~1489~1490~1491~1492~1493~1494~1495~1496~1497~1498~1499~1500~1501~1502~1503~1504~1505~1506~1507~1508~1509~1510~1511~1512~1513~1514~1515~1516~1517~1518~1519~1520~1521~1522~1523~1524~1525~1526~1527~1528~1529~1530~1531~1532~1533~1534~1535~1536~1537~1538~1539~1540~1541~1542~1543~1544~1545~1546~1547~1548~1549~1550~1551~1552~1553~1554~1555~1556~1557~1558~1559~1560~1561~1562~1563~1564~1565~1566~1567~1568~1569~1570~1571~1572~1573~1574~1575~1576~1577~1578~1579~1580~1581~1582~1583~1584~1585~1586~1587~1588~1589~1590~1591~1592~1593~1594~1595~1596~1597~1598~1599~1600~1601~1602~1603~1604~1605~1606~1607~1608~1609~1610~1611~1612~1613~1614~1615~1616~1617~1618~1619~1620~1621~1622~1623~1624~1625~1626~1627~1628~1629~1630~1631~1632~1633~1634~1635~1636~1637~1638~1639~1640~1641~1642~1643~1644~1645~1646~1647~1648~1649~1650~1651~1652~1653~1654~1655~1656~1657~1658~1659~1660~1661~1662~1663~1664~1665~1666~1667~1668~1669~1670~1671~1672~1673~1674~1675~1676~1677~1678~1679~1680~1681~1682~1683~1684~1685~1686~1687~1688~1689~1690~1691~1692~1693~1694~1695~1696~1697~1698~1699~1700~1701~1702~1703~1704~1705~1706~1707~1708~1709~1710~1711~1712~1713~1714~1715~1716~1717~1718~1719~1720~1721~1722~1723~1724~1725~1726~1727~1728~1729~1730~1731~1732~1733~1734~1735~1736~1737~1738~1739~1740~1741~1742~1743~1744~1745~1746~1747~1748~1749~1750~1751~1752~1753~1754~1755~1756~1757~1758~1759~1760~1761~1762~1763~1764~1765~1766~1767~1768~1769~1770~1771~1772~1773~1774~1775~1776~1777~1778~1779~1780~1781~1782~1783~1784~1785~1786~1787~1788~1789~1790~1791~1792~1793~1794~1795~1796~1797~1798~1799~1800~1801~1802~1803~1804~1805~1806~1807~1808~1809~1810~1811~1812~1813~1814~1815~1816~1817~1818~1819~1820~1821~1822~1823~1824~1825~1826~1827~1828~1829~1830~1831~1832~1833~1834~1835~1836~1837~1838~1839~1840~1841~1842~1843~1844~1845~1846~1847~1848~1849~1850~1851~1852~1853~1854~1855~1856~1857~1858~1859~1860~1861~1862~1863~1864~1865~1866~1867~1868~1869~1870~1871~1872~1873~1874~1875~1876~1877~1878~1879~1880~1881~1882~1883~1884~1885~1886~1887~1888~1889~1890~1891~1892~1893~1894~1895~1896~1897~1898~1899~1900~1901~1902~1903~1904~1905~1906~1907~1908~1909~1910~1911~1912~1913~1914~1915~1916~1917~1918~1919~1920~1921~1922~1923~1924~1925~1926~1927~1928~1929~1930~1931~1932~1933~1934~1935~1936~1937~1938~1939~1940~1941~1942~1943~1944~1945~1946~1947~1948~1949~1950~1951~1952~1953~1954~1955~1956~1957~1958~1959~1960~1961~1962~1963~1964~1965~1966~1967~1968~1969~1970~1971~1972~1973~1974~1975~1976~1977~1978~1979~1980~1981~1982~1983~1984~1985~1986~1987~1988~1989~1990~1991~1992~1993~1994~1995~1996~1997~1998~1999~2000~2001~2002~2003~2004~2005~2006~2007~2008~2009~2010~2011~2012~2013~2014~2015~2016~2017~2018~2019~2020~2021~2022~2023~2024~2025~2026~2027~2028~2029~2030~2031~2032~2033~2034~2035~2036~2037~2038~2039~2040~2041~2042~2043~2044~2045~2046~2047~2048~2049~2050~2051~2052~2053~2054~2055~2056~2057~2058~2059~2060~2061~2062~2063~2064~2065~2066~2067~2068~2069~2070~2071~2072~2073~2074~2075~2076~2077~2078~2079~2080~2081~2082~2083~2084~2085~2086~2087~2088~2089~2090~2091~2092~2093~2094~2095~2096~2097~2098~2099~2100~2101~2102~2103~2104~2105~2106~2107~2108~2109~2110~2111~2112~2113~2114~2115~2116~2117~2118~2119~2120~2121~2122~2123~2124~2125~2126~2127~2128~2129~2130~2131~2132~2133~2134~2135~2136~2137~2138~2139~2140~2141~2142~2143~2144~2145~2146~2147~2148~2149~2150~2151~2152~2153~2154~2155~2156~2157~2158~2159~2160~2161~2162~2163~2164~2165~2166~2167~2168~2169~2170~2171~2172~2173~2174~2175~2176~2177~2178~2179~2180~2181~2182~2183~2184~2185~2186~2187~2188~2189~2190~2191~2192~2193~2194~2195~2196~2197~2198~2199~2200~2201~2202~2203~2204~2205~2206~2207~2208~2209~2210~2211~2212~2213~2214~2215~2216~2217~2218~2219~2220~2221~2222~2223~2224~2225~2226~2227~2228~2229~2230~2231~2232~2233~2234~2235~2236~2237~2238~2239~2240~2241~2242~2243~2244~2245~2246~2247~2248~2249~2250~2251~2252~2253~2254~2255~2256~2257~2258~2259~2260~2261~2262~2263~2264~2265~2266~2267~2268~2269~2270~2271~2272~2273~2274~2275~2276~2277~2278~2279~2280~2281~2282~2283~PLUS~MINUS,at~t~a~n~m)
  N()
  DNA()  # genome copy (seed at MOI); shared by all operons
  mRNA_N()
  mRNA_cI()
  mRNA_cII()
  mRNA_cIII()
  mRNA_cro()
  CI(d)
  Cro(d)
  CII(p)
  CIII(p)
  P1(s)
  P2(s)
  RNAPf()
  Vol()   # volume-proxy clock: count/Vol0 = V(t)/V_ref
  Src()   # buffered driver of the volume clock (constant, count 1)
end molecule types
begin seed species
  N() 0
  mRNA_cro() 0
  mRNA_cII() 0
  mRNA_N() 0
  mRNA_cIII() 0
  mRNA_cI() 0
  CI(d) 0
  Cro(d) 0
  CII(p) 0
  CIII(p) 0
  P1(s) P1_tot
  P2(s) P2_tot
  RNAPf() RNAPf_m
  DNA() MOI
  Vol() Vol0
  Src() 1
end seed species
begin observables
  Molecules  Obs_CI2   CI(d!1).CI(d!1)
  Molecules  Obs_Cro2  Cro(d!1).Cro(d!1)
  Molecules  Obs_CII   CII(p)
  Molecules  Obs_RNAP  RNAPf()
  Molecules  Obs_N     N()
  Species    CI2_dimer  CI(d!1).CI(d!1)
  Species    Cro2_dimer Cro(d!1).Cro(d!1)
  Molecules  CII_total CII()
  Molecules  CIII_tot  CIII()
  Molecules  CImon     CI(d)
  Molecules  Crmon     Cro(d)
  Molecules  Obs_Vol    Vol()
end observables
begin functions
  wR_1() = exp(-(0)/RT)  # (OOO, R@PR=0, R@PRM=0)
  wR_2() = exp(-(dG_RMp)/RT) * (Obs_RNAP*molec_to_M)  # (OOO, R@PR=0, R@PRM=1)
  wR_3() = exp(-(dG_Rp)/RT) * (Obs_RNAP*molec_to_M)  # (OOO, R@PR=1, R@PRM=0)
  wR_4() = exp(-(dG_Rp+dG_RMp)/RT) * (Obs_RNAP*molec_to_M)^2  # (OOO, R@PR=1, R@PRM=1)
  wR_5() = exp(-(dGR3)/RT) * (Obs_CI2*molec_to_M*dimer_scale)  # (OOR, R@PR=0, R@PRM=0)
  wR_6() = exp(-(dGR3+dG_Rp)/RT) * (Obs_CI2*molec_to_M*dimer_scale) * (Obs_RNAP*molec_to_M)  # (OOR, R@PR=1, R@PRM=0)
  wR_7() = exp(-(dGC3)/RT) * (Obs_Cro2*molec_to_M*dimer_scale)  # (OOC, R@PR=0, R@PRM=0)
  wR_8() = exp(-(dGC3+dG_Rp)/RT) * (Obs_Cro2*molec_to_M*dimer_scale) * (Obs_RNAP*molec_to_M)  # (OOC, R@PR=1, R@PRM=0)
  wR_9() = exp(-(dGR2)/RT) * (Obs_CI2*molec_to_M*dimer_scale)  # (ORO, R@PR=0, R@PRM=0)
  wR_10() = exp(-(dGR2+dG_RMp)/RT) * (Obs_CI2*molec_to_M*dimer_scale) * (Obs_RNAP*molec_to_M)  # (ORO, R@PR=0, R@PRM=1)
  wR_11() = exp(-(dGR2+dGR3+dG23)/RT) * (Obs_CI2*molec_to_M*dimer_scale)^2  # (ORR, R@PR=0, R@PRM=0)
  wR_12() = exp(-(dGR2+dGC3)/RT) * (Obs_CI2*molec_to_M*dimer_scale) * (Obs_Cro2*molec_to_M*dimer_scale)  # (ORC, R@PR=0, R@PRM=0)
  wR_13() = exp(-(dGC2)/RT) * (Obs_Cro2*molec_to_M*dimer_scale)  # (OCO, R@PR=0, R@PRM=0)
  wR_14() = exp(-(dGC2+dG_RMp)/RT) * (Obs_Cro2*molec_to_M*dimer_scale) * (Obs_RNAP*molec_to_M)  # (OCO, R@PR=0, R@PRM=1)
  wR_15() = exp(-(dGC2+dGR3)/RT) * (Obs_CI2*molec_to_M*dimer_scale) * (Obs_Cro2*molec_to_M*dimer_scale)  # (OCR, R@PR=0, R@PRM=0)
  wR_16() = exp(-(dGC2+dGC3)/RT) * (Obs_Cro2*molec_to_M*dimer_scale)^2  # (OCC, R@PR=0, R@PRM=0)
  wR_17() = exp(-(dGR1)/RT) * (Obs_CI2*molec_to_M*dimer_scale)  # (ROO, R@PR=0, R@PRM=0)
  wR_18() = exp(-(dGR1+dG_RMp)/RT) * (Obs_CI2*molec_to_M*dimer_scale) * (Obs_RNAP*molec_to_M)  # (ROO, R@PR=0, R@PRM=1)
  wR_19() = exp(-(dGR1+dGR3)/RT) * (Obs_CI2*molec_to_M*dimer_scale)^2  # (ROR, R@PR=0, R@PRM=0)
  wR_20() = exp(-(dGR1+dGC3)/RT) * (Obs_CI2*molec_to_M*dimer_scale) * (Obs_Cro2*molec_to_M*dimer_scale)  # (ROC, R@PR=0, R@PRM=0)
  wR_21() = exp(-(dGR1+dGR2+dG12)/RT) * (Obs_CI2*molec_to_M*dimer_scale)^2  # (RRO, R@PR=0, R@PRM=0)
  wR_22() = exp(-(dGR1+dGR2+dG_RMp+dG12)/RT) * (Obs_CI2*molec_to_M*dimer_scale)^2 * (Obs_RNAP*molec_to_M)  # (RRO, R@PR=0, R@PRM=1)
  wR_23() = exp(-(dGR1+dGR2+dGR3+dG12)/RT) * (Obs_CI2*molec_to_M*dimer_scale)^3  # (RRR, R@PR=0, R@PRM=0)
  wR_24() = exp(-(dGR1+dGR2+dGC3+dG12)/RT) * (Obs_CI2*molec_to_M*dimer_scale)^2 * (Obs_Cro2*molec_to_M*dimer_scale)  # (RRC, R@PR=0, R@PRM=0)
  wR_25() = exp(-(dGR1+dGC2)/RT) * (Obs_CI2*molec_to_M*dimer_scale) * (Obs_Cro2*molec_to_M*dimer_scale)  # (RCO, R@PR=0, R@PRM=0)
  wR_26() = exp(-(dGR1+dGC2+dG_RMp)/RT) * (Obs_CI2*molec_to_M*dimer_scale) * (Obs_Cro2*molec_to_M*dimer_scale) * (Obs_RNAP*molec_to_M)  # (RCO, R@PR=0, R@PRM=1)
  wR_27() = exp(-(dGR1+dGC2+dGR3)/RT) * (Obs_CI2*molec_to_M*dimer_scale)^2 * (Obs_Cro2*molec_to_M*dimer_scale)  # (RCR, R@PR=0, R@PRM=0)
  wR_28() = exp(-(dGR1+dGC2+dGC3)/RT) * (Obs_CI2*molec_to_M*dimer_scale) * (Obs_Cro2*molec_to_M*dimer_scale)^2  # (RCC, R@PR=0, R@PRM=0)
  wR_29() = exp(-(dGC1)/RT) * (Obs_Cro2*molec_to_M*dimer_scale)  # (COO, R@PR=0, R@PRM=0)
  wR_30() = exp(-(dGC1+dG_RMp)/RT) * (Obs_Cro2*molec_to_M*dimer_scale) * (Obs_RNAP*molec_to_M)  # (COO, R@PR=0, R@PRM=1)
  wR_31() = exp(-(dGC1+dGR3)/RT) * (Obs_CI2*molec_to_M*dimer_scale) * (Obs_Cro2*molec_to_M*dimer_scale)  # (COR, R@PR=0, R@PRM=0)
  wR_32() = exp(-(dGC1+dGC3)/RT) * (Obs_Cro2*molec_to_M*dimer_scale)^2  # (COC, R@PR=0, R@PRM=0)
  wR_33() = exp(-(dGC1+dGR2)/RT) * (Obs_CI2*molec_to_M*dimer_scale) * (Obs_Cro2*molec_to_M*dimer_scale)  # (CRO, R@PR=0, R@PRM=0)
  wR_34() = exp(-(dGC1+dGR2+dG_RMp)/RT) * (Obs_CI2*molec_to_M*dimer_scale) * (Obs_Cro2*molec_to_M*dimer_scale) * (Obs_RNAP*molec_to_M)  # (CRO, R@PR=0, R@PRM=1)
  wR_35() = exp(-(dGC1+dGR2+dGR3+dG23)/RT) * (Obs_CI2*molec_to_M*dimer_scale)^2 * (Obs_Cro2*molec_to_M*dimer_scale)  # (CRR, R@PR=0, R@PRM=0)
  wR_36() = exp(-(dGC1+dGR2+dGC3)/RT) * (Obs_CI2*molec_to_M*dimer_scale) * (Obs_Cro2*molec_to_M*dimer_scale)^2  # (CRC, R@PR=0, R@PRM=0)
  wR_37() = exp(-(dGC1+dGC2)/RT) * (Obs_Cro2*molec_to_M*dimer_scale)^2  # (CCO, R@PR=0, R@PRM=0)
  wR_38() = exp(-(dGC1+dGC2+dG_RMp)/RT) * (Obs_Cro2*molec_to_M*dimer_scale)^2 * (Obs_RNAP*molec_to_M)  # (CCO, R@PR=0, R@PRM=1)
  wR_39() = exp(-(dGC1+dGC2+dGR3)/RT) * (Obs_CI2*molec_to_M*dimer_scale) * (Obs_Cro2*molec_to_M*dimer_scale)^2  # (CCR, R@PR=0, R@PRM=0)
  wR_40() = exp(-(dGC1+dGC2+dGC3)/RT) * (Obs_Cro2*molec_to_M*dimer_scale)^3  # (CCC, R@PR=0, R@PRM=0)
  A_PR() = kPR * (wR_3() + wR_4() + wR_6() + wR_8()) / (wR_1() + wR_2() + wR_3() + wR_4() + wR_5() + wR_6() + wR_7() + wR_8() + wR_9() + wR_10() + wR_11() + wR_12() + wR_13() + wR_14() + wR_15() + wR_16() + wR_17() + wR_18() + wR_19() + wR_20() + wR_21() + wR_22() + wR_23() + wR_24() + wR_25() + wR_26() + wR_27() + wR_28() + wR_29() + wR_30() + wR_31() + wR_32() + wR_33() + wR_34() + wR_35() + wR_36() + wR_37() + wR_38() + wR_39() + wR_40())
  A_PRM() = (kPRM1*(wR_10() + wR_22() + wR_34()) + kPRM2*(wR_2() + wR_4() + wR_14() + wR_18() + wR_26() + wR_30() + wR_38())) / (wR_1() + wR_2() + wR_3() + wR_4() + wR_5() + wR_6() + wR_7() + wR_8() + wR_9() + wR_10() + wR_11() + wR_12() + wR_13() + wR_14() + wR_15() + wR_16() + wR_17() + wR_18() + wR_19() + wR_20() + wR_21() + wR_22() + wR_23() + wR_24() + wR_25() + wR_26() + wR_27() + wR_28() + wR_29() + wR_30() + wR_31() + wR_32() + wR_33() + wR_34() + wR_35() + wR_36() + wR_37() + wR_38() + wR_39() + wR_40())
  wRE_2() = exp(-dG_RE_2/RT) * (Obs_RNAP*molec_to_M)
  wRE_3() = exp(-dG_RE_3/RT) * (Obs_CII*molec_to_M)
  wRE_4() = exp(-dG_RE_4/RT) * (Obs_CII*molec_to_M)*(Obs_RNAP*molec_to_M)
  A_PRE() = (wRE_2()*koc_RE_2 + wRE_4()*koc_RE_4) / (1 + wRE_2() + wRE_3() + wRE_4())
  wL_2() = exp(-dG_L_2/RT) * (Obs_Cro2*molec_to_M*dimer_scale)
  wL_3() = exp(-dG_L_3/RT) * (Obs_Cro2*molec_to_M*dimer_scale)
  wL_4() = exp(-dG_L_4/RT) * (Obs_CI2*molec_to_M*dimer_scale)
  wL_5() = exp(-dG_L_5/RT) * (Obs_CI2*molec_to_M*dimer_scale)
  wL_6() = exp(-dG_L_6/RT) * (Obs_RNAP*molec_to_M)
  wL_7() = exp(-dG_L_7/RT) * (Obs_Cro2*molec_to_M*dimer_scale)^2
  wL_8() = exp(-dG_L_8/RT) * (Obs_Cro2*molec_to_M*dimer_scale)*(Obs_CI2*molec_to_M*dimer_scale)
  wL_9() = exp(-dG_L_9/RT) * (Obs_CI2*molec_to_M*dimer_scale)*(Obs_Cro2*molec_to_M*dimer_scale)
  wL_10() = exp(-dG_L_10/RT) * (Obs_CI2*molec_to_M*dimer_scale)^2
  A_PL() = wL_6()*koc_L_6 / (1 + wL_2() + wL_3() + wL_4() + wL_5() + wL_6() + wL_7() + wL_8() + wL_9() + wL_10())
  f_load() = k24*Obs_N       # reversible N-loading propensity at the nut (both operons)
  mu_dil() = k_grow/Obs_Vol  # linear-growth dilution specific rate = k0/g(t)
end functions
begin reaction rules
  # --- operon PR (L=630 nt, ~PLUS collapse) ---
  Rinit_PR: DNA() -> DNA() + RNAP(op~PR,loc~0,at~t) A_PR()
  RstepT_PR: RNAP(op~PR,loc~?,at~t) -> RNAP(op~PR,loc~PLUS,at~t) k_step
  RstepA_PR: RNAP(op~PR,loc~?,at~a) -> RNAP(op~PR,loc~PLUS,at~a) k_step
  # nutR: slow-step + reversible N loading (Arkin Table 2: k23 escape, k24/k25 load, k26 escape)
  Rpause_PR:   RNAP(op~PR,loc~242,at~t) -> RNAP(op~PR,loc~242,at~n) k_pause
  Rescape0_PR: RNAP(op~PR,loc~242,at~n) -> RNAP(op~PR,loc~PLUS,at~t) k23
  RNload_PR:   RNAP(op~PR,loc~242,at~n) -> RNAP(op~PR,loc~242,at~m) f_load()
  RNunload_PR: RNAP(op~PR,loc~242,at~m) -> RNAP(op~PR,loc~242,at~n) k25
  Rescape1_PR: RNAP(op~PR,loc~242,at~m) -> RNAP(op~PR,loc~PLUS,at~a) k26
  Remit_PR_mRNA_cro_t: RNAP(op~PR,loc~218,at~t) -> RNAP(op~PR,loc~PLUS,at~t) + mRNA_cro() k_emit
  Remit_PR_mRNA_cro_a: RNAP(op~PR,loc~218,at~a) -> RNAP(op~PR,loc~PLUS,at~a) + mRNA_cro() k_emit
  Rfo_PR_tR1: RNAP(op~PR,loc~314,at~t) -> 0 k_fo_PR_tR1 DeleteMolecules
  RdoneT_PR: RNAP(op~PR,loc~630,at~t) -> mRNA_cII() k_comp DeleteMolecules
  RdoneA_PR: RNAP(op~PR,loc~630,at~a) -> mRNA_cII() k_comp DeleteMolecules
  # --- operon PL (L=2283 nt, ~PLUS collapse) ---
  Rinit_PL: DNA() -> DNA() + RNAP(op~PL,loc~0,at~t) A_PL()
  RstepT_PL: RNAP(op~PL,loc~?,at~t) -> RNAP(op~PL,loc~PLUS,at~t) k_step
  RstepA_PL: RNAP(op~PL,loc~?,at~a) -> RNAP(op~PL,loc~PLUS,at~a) k_step
  # nutL: slow-step + reversible N loading (Arkin Table 2)
  Rpause_PL:   RNAP(op~PL,loc~48,at~t) -> RNAP(op~PL,loc~48,at~n) k_pause
  Rescape0_PL: RNAP(op~PL,loc~48,at~n) -> RNAP(op~PL,loc~PLUS,at~t) k23
  RNload_PL:   RNAP(op~PL,loc~48,at~n) -> RNAP(op~PL,loc~48,at~m) f_load()
  RNunload_PL: RNAP(op~PL,loc~48,at~m) -> RNAP(op~PL,loc~48,at~n) k25
  Rescape1_PL: RNAP(op~PL,loc~48,at~m) -> RNAP(op~PL,loc~PLUS,at~a) k26
  Remit_PL_mRNA_N_t: RNAP(op~PL,loc~545,at~t) -> RNAP(op~PL,loc~PLUS,at~t) + mRNA_N() k_emit
  Remit_PL_mRNA_N_a: RNAP(op~PL,loc~545,at~a) -> RNAP(op~PL,loc~PLUS,at~a) + mRNA_N() k_emit
  Rfo_PL_tL1: RNAP(op~PL,loc~1022,at~t) -> 0 k_fo_PL_tL1 DeleteMolecules
  RdoneT_PL: RNAP(op~PL,loc~2283,at~t) -> mRNA_cIII() k_comp DeleteMolecules
  RdoneA_PL: RNAP(op~PL,loc~2283,at~a) -> mRNA_cIII() k_comp DeleteMolecules
  # --- operon PRM (L=713 nt, ~PLUS collapse) ---
  Rinit_PRM: DNA() -> DNA() + RNAP(op~PRM,loc~0,at~t) A_PRM()
  RstepT_PRM: RNAP(op~PRM,loc~?,at~t) -> RNAP(op~PRM,loc~PLUS,at~t) k_step
  RstepA_PRM: RNAP(op~PRM,loc~?,at~a) -> RNAP(op~PRM,loc~PLUS,at~a) k_step
  RdoneT_PRM: RNAP(op~PRM,loc~713,at~t) -> mRNA_cI() k_comp DeleteMolecules
  RdoneA_PRM: RNAP(op~PRM,loc~713,at~a) -> mRNA_cI() k_comp DeleteMolecules
  # --- operon PRE (L=1116 nt, ~PLUS collapse) ---
  Rinit_PRE: DNA() -> DNA() + RNAP(op~PRE,loc~0,at~t) A_PRE()
  RstepT_PRE: RNAP(op~PRE,loc~?,at~t) -> RNAP(op~PRE,loc~PLUS,at~t) k_step
  RstepA_PRE: RNAP(op~PRE,loc~?,at~a) -> RNAP(op~PRE,loc~PLUS,at~a) k_step
  RdoneT_PRE: RNAP(op~PRE,loc~1116,at~t) -> mRNA_cI() k_comp DeleteMolecules
  RdoneA_PRE: RNAP(op~PRE,loc~1116,at~a) -> mRNA_cI() k_comp DeleteMolecules
  # --- extra rules (translation / turnover / feedback) ---
  Rtl_Cro: mRNA_cro() -> mRNA_cro() + Cro(d) k_tl
  Rtl_CII: mRNA_cII() -> mRNA_cII() + CII(p) k_tl
  Rtl_N: mRNA_N() -> mRNA_N() + N() k_tl
  Rtl_CIII: mRNA_cIII() -> mRNA_cIII() + CIII(p) k_tl
  Rtl_CI: mRNA_cI() -> mRNA_cI() + CI(d) k_tl
  Rdeg_mRNA_cro: mRNA_cro() -> 0 k_rnase DeleteMolecules
  Rdeg_mRNA_cII: mRNA_cII() -> 0 k_rnase DeleteMolecules
  Rdeg_mRNA_N: mRNA_N() -> 0 k_rnase DeleteMolecules
  Rdeg_mRNA_cIII: mRNA_cIII() -> 0 k_rnase DeleteMolecules
  Rdeg_mRNA_cI: mRNA_cI() -> 0 k_rnase DeleteMolecules
  R_deg_CI:    CI(d) -> 0  k1
  R_dim_CI:    CI(d) + CI(d) <-> CI(d!1).CI(d!1)  k2, k3
  R_deg_Cro:   Cro(d) -> 0  k4
  R_dim_Cro:   Cro(d) + Cro(d) <-> Cro(d!1).Cro(d!1)  k5, k6
  R_deg_N:     N() -> 0  k7
  R_P1_bind_CII:   CII(p) + P1(s) <-> CII(p!1).P1(s!1)  k8, k9
  R_P1_deg_CII:    CII(p!1).P1(s!1) -> P1(s)  k10  DeleteMolecules
  R_P1_bind_CIII:  CIII(p) + P1(s) <-> CIII(p!1).P1(s!1)  k11, k12
  R_P1_deg_CIII:   CIII(p!1).P1(s!1) -> P1(s)  k13  DeleteMolecules
  R_P2_bind_CII:   CII(p) + P2(s) <-> CII(p!1).P2(s!1)  k14, k15
  R_P2_deg_CII:    CII(p!1).P2(s!1) -> P2(s)  k16  DeleteMolecules
  R_P2_bind_CIII:  CIII(p) + P2(s) <-> CIII(p!1).P2(s!1)  k17, k18
  R_P2_deg_CIII:   CIII(p!1).P2(s!1) -> P2(s)  k19  DeleteMolecules
  # === issue #6 exact-variant reactions: growth clock + dilution ===
  # volume-proxy clock: Vol grows linearly so Obs_Vol/Vol0 = 1+k0*t = V(t)/V_ref
  Rgrow: Src() -> Src() + Vol() k_grow
  # first-order growth dilution on every phage species at mu(t)=k0/g(t) (host pools &
  # the non-replicating genome are constant-concentration and are NOT diluted)
  Rdil_mRNA_cro:  mRNA_cro()  -> 0 mu_dil() DeleteMolecules
  Rdil_mRNA_cII:  mRNA_cII()  -> 0 mu_dil() DeleteMolecules
  Rdil_mRNA_N:    mRNA_N()    -> 0 mu_dil() DeleteMolecules
  Rdil_mRNA_cIII: mRNA_cIII() -> 0 mu_dil() DeleteMolecules
  Rdil_mRNA_cI:   mRNA_cI()   -> 0 mu_dil() DeleteMolecules
  Rdil_N:         N()         -> 0 mu_dil() DeleteMolecules
  Rdil_CImon:     CI(d)       -> 0 mu_dil() DeleteMolecules
  Rdil_CI2:       CI(d!1).CI(d!1)   -> 0 mu_dil() DeleteMolecules
  Rdil_Crmon:     Cro(d)      -> 0 mu_dil() DeleteMolecules
  Rdil_Cro2:      Cro(d!1).Cro(d!1) -> 0 mu_dil() DeleteMolecules
  Rdil_CII:       CII(p)      -> 0 mu_dil() DeleteMolecules
  Rdil_CIII:      CIII(p)     -> 0 mu_dil() DeleteMolecules
end reaction rules
end model
begin actions
  writeXML()
end actions
