# Abeta42 on-pathway aggregation (Rana et al. 2020, Eq. 4)
#
# Fitting-ready BNGL for the PyBNF edition-2 job `on_pathway`. Reconstructed from:
#   Rana P, Bose P, Vaidya A, Rangachari V, Ghosh P. "Global fitting and parameter
#   identifiability for amyloid-beta aggregation with competing pathways."
#   2020 IEEE 20th Int. Conf. on BioInformatics and BioEngineering (BIBE):73-78.
#   DOI: 10.1109/BIBE50027.2020.00020
#
# The network is Eq. 4 (on pathway), Eq. 4-II (off pathway) and Eq. 5 (switching) of that
# paper, with the rate laws taken from its flux equations H_i, I_i, G'_1, H'_i, I'_i and J.
# Differences from the curated reference model
# (models/amyloid_beta_competing_aggregation_pathways_rana2020):
#   * no simulation actions -- only generate_network, which must be retained because the
#     conf otherwise falls back to a bare generate_network and would still work here but
#     would lose the recorded network size;
#   * the ThT observable is not a BNGL function: it is a conf-side measurement model
#     `observable: ThT..., formula: map_on*Obs_F + map_off*Obs_Fp1`, so the mapping
#     constants Rana et al. fit (map' / k_off / k_off1 / k_off2) are free parameters;
#   * nominal rate constants are the best fit recovered by this job (see README.md).

begin model

begin parameters
  # Constants for conversion to a population-based (molecule-count) unit system.
  # V_ref is a 100 uL plate well, the format in which the ThT assays of Rana
  # et al. (2020) are read.
  NA     6.02214076e23  # molecules/mol
  V_ref  1e-4           # L/well

  # 25 uM Abeta42 is the peptide concentration stated in Sec. II-A of Rana
  # et al. (2020). Mic_present is the pseudo-micelle concentration formed by
  # 5 mM C12 fatty acid, taken as 100 uM (aggregation number 50). The
  # aggregation number is not reported and is not identifiable from these data:
  # while micelles are in excess only the product k_con*[L] is constrained, so
  # Mic_present is fixed and k_con absorbs it. 100 uM is a large excess over the
  # ~6 uM of micelle that the off pathway can consume from 25 uM peptide.
  Abeta_0      25  # uM
  Mic_present  100  # uM
  Mic_0        0  # uM

  # On-pathway nucleation, A_i + A_1 <-> A_i+1; see Eq. 4 and flux H_i in
  # Rana et al. (2020).
  k_nuon   3.66768  # /uM/h
  k_nuon_  82.1423  # /h

  # On-pathway fibril binding, A_i + F <-> F; see Eq. 4 and flux I_i in
  # Rana et al. (2020). F is the 12-mer nucleus, A_12.
  k_fbon   6.7244  # /uM/h
  k_fbon_  9.98968  # /h

  # Thioflavin T mapping constants. Rana et al. (2020) write the measured signal
  # as signal_on + signal_off and fit an off-pathway mapping constant (map' in
  # Sec. IV-B, k_off / k_off1 / k_off2 in Table I) over 10^0-10^5.
  map_on   8.66927  # a.u./uM
end parameters

begin molecule types
  # Abeta42 on-pathway oligomer of size n monomers. Ab(p~on,n~12) is the
  # 12-mer nucleus, which Rana et al. (2020) identify with the fibril F.
  # The p component is retained so that this file and the competing-pathway
  # files share one molecule-type declaration.
  Ab(p~on~off,n~1~2~3~4~5~6~7~8~9~10~11~12)
end molecule types

begin seed species
  Ab(p~on,n~1)  Abeta_0  # uM
end seed species

begin observables
  # On-pathway oligomers A_1..A_11.
  Molecules  Obs_A1  Ab(p~on,n~1)
  Molecules  Obs_A2  Ab(p~on,n~2)
  Molecules  Obs_A3  Ab(p~on,n~3)
  Molecules  Obs_A4  Ab(p~on,n~4)
  Molecules  Obs_A5  Ab(p~on,n~5)
  Molecules  Obs_A6  Ab(p~on,n~6)
  Molecules  Obs_A7  Ab(p~on,n~7)
  Molecules  Obs_A8  Ab(p~on,n~8)
  Molecules  Obs_A9  Ab(p~on,n~9)
  Molecules  Obs_A10  Ab(p~on,n~10)
  Molecules  Obs_A11  Ab(p~on,n~11)

  # On-pathway 12-mer: the nucleus, identified with the fibril F.
  Molecules  Obs_F  Ab(p~on,n~12)
end observables

begin reaction rules
  # --- On pathway, Eq. 4 in Rana et al. (2020) ---

  # Nucleation by monomer addition, A_i + A_1 <-> A_i+1 (flux H_i). Forward and
  # reverse are written as separate rules because the reverse of a
  # molecule-deleting rule is a molecule-synthesizing rule.
  R_nuon_1_f: Ab(p~on,n~1) + Ab(p~on,n~1) -> Ab(p~on,n~2)  k_nuon
  R_nuon_1_r: Ab(p~on,n~2) -> Ab(p~on,n~1) + Ab(p~on,n~1)  k_nuon_
  R_nuon_2_f: Ab(p~on,n~2) + Ab(p~on,n~1) -> Ab(p~on,n~3)  k_nuon
  R_nuon_2_r: Ab(p~on,n~3) -> Ab(p~on,n~2) + Ab(p~on,n~1)  k_nuon_
  R_nuon_3_f: Ab(p~on,n~3) + Ab(p~on,n~1) -> Ab(p~on,n~4)  k_nuon
  R_nuon_3_r: Ab(p~on,n~4) -> Ab(p~on,n~3) + Ab(p~on,n~1)  k_nuon_
  R_nuon_4_f: Ab(p~on,n~4) + Ab(p~on,n~1) -> Ab(p~on,n~5)  k_nuon
  R_nuon_4_r: Ab(p~on,n~5) -> Ab(p~on,n~4) + Ab(p~on,n~1)  k_nuon_
  R_nuon_5_f: Ab(p~on,n~5) + Ab(p~on,n~1) -> Ab(p~on,n~6)  k_nuon
  R_nuon_5_r: Ab(p~on,n~6) -> Ab(p~on,n~5) + Ab(p~on,n~1)  k_nuon_
  R_nuon_6_f: Ab(p~on,n~6) + Ab(p~on,n~1) -> Ab(p~on,n~7)  k_nuon
  R_nuon_6_r: Ab(p~on,n~7) -> Ab(p~on,n~6) + Ab(p~on,n~1)  k_nuon_
  R_nuon_7_f: Ab(p~on,n~7) + Ab(p~on,n~1) -> Ab(p~on,n~8)  k_nuon
  R_nuon_7_r: Ab(p~on,n~8) -> Ab(p~on,n~7) + Ab(p~on,n~1)  k_nuon_
  R_nuon_8_f: Ab(p~on,n~8) + Ab(p~on,n~1) -> Ab(p~on,n~9)  k_nuon
  R_nuon_8_r: Ab(p~on,n~9) -> Ab(p~on,n~8) + Ab(p~on,n~1)  k_nuon_
  R_nuon_9_f: Ab(p~on,n~9) + Ab(p~on,n~1) -> Ab(p~on,n~10)  k_nuon
  R_nuon_9_r: Ab(p~on,n~10) -> Ab(p~on,n~9) + Ab(p~on,n~1)  k_nuon_
  R_nuon_10_f: Ab(p~on,n~10) + Ab(p~on,n~1) -> Ab(p~on,n~11)  k_nuon
  R_nuon_10_r: Ab(p~on,n~11) -> Ab(p~on,n~10) + Ab(p~on,n~1)  k_nuon_
  R_nuon_11_f: Ab(p~on,n~11) + Ab(p~on,n~1) -> Ab(p~on,n~12)  k_nuon
  R_nuon_11_r: Ab(p~on,n~12) -> Ab(p~on,n~11) + Ab(p~on,n~1)  k_nuon_

  # Fibril binding, A_i + F <-> F (flux I_i). The fibril is catalytic: it takes up
  # an oligomer without changing its own count, which is how Rana et al. (2020)
  # write the reaction and the flux.
  R_fbon_1_f: Ab(p~on,n~1) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_1_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~1)  k_fbon_
  R_fbon_2_f: Ab(p~on,n~2) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_2_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~2)  k_fbon_
  R_fbon_3_f: Ab(p~on,n~3) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_3_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~3)  k_fbon_
  R_fbon_4_f: Ab(p~on,n~4) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_4_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~4)  k_fbon_
  R_fbon_5_f: Ab(p~on,n~5) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_5_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~5)  k_fbon_
  R_fbon_6_f: Ab(p~on,n~6) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_6_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~6)  k_fbon_
  R_fbon_7_f: Ab(p~on,n~7) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_7_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~7)  k_fbon_
  R_fbon_8_f: Ab(p~on,n~8) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_8_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~8)  k_fbon_
  R_fbon_9_f: Ab(p~on,n~9) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_9_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~9)  k_fbon_
  R_fbon_10_f: Ab(p~on,n~10) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_10_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~10)  k_fbon_
  R_fbon_11_f: Ab(p~on,n~11) + Ab(p~on,n~12) -> Ab(p~on,n~12)  k_fbon
  R_fbon_11_r: Ab(p~on,n~12) -> Ab(p~on,n~12) + Ab(p~on,n~11)  k_fbon_
end reaction rules

end model

begin actions
  generate_network({overwrite=>1})  # 12 species, 44 reactions
end actions
