begin model

# Header metadata block. Minimal mode (§6.1.1) — these four keys are REQUIRED and
# go immediately after `begin model`, one blank line between each tag. The verbose
# keys (#@organism, #@license, #@units_convention, …) belong to §6.1.2, which is
# DEFERRED: do not use them until that section is specified.

#@title: TODO_descriptive_title (Firstauthor et al., YEAR)

#@description: |
#  TODO — cover all three: what it IS (biology, components, interactions), how it
#  WORKS (mass action, Hill, feedback topology), and what it DOES when simulated
#  (steady states, oscillations, bistability, transients). A description that only
#  says what the model is, is insufficient (§6.1.1).

#@keyword: |
#  TODO — domain, dynamics, math/topology, and organism as a full binomial
#  (e.g. receptor signaling, compartmental, energy patterns, Homo sapiens)

#@reference: |
#  TODO Authors (Year). Title. Journal Volume:Pages. doi:XX.XXXX/XXXXX

#@note: |
#  TODO optional — delete this tag if unused. Declare the simulation intent here
#  or in the protocol: population-based (molecule counts), or concentration-based
#  with conversion through NA and a volume (§1.3.4).

begin parameters
  # --- Required conversion constants (use when applicable) ---
  NA     6.02214076e23  # 1/mol
  h_mem  1e-7           # m

  # --- Optional SSA scaling (subvolume fraction) ---
  f      1.0            # dimensionless

  # --- Compartment volumes (used by compartments block) ---
  V_cyt  1e-12          # L
  V_mem  1e-15          # L

  # --- Model parameters (each line MUST end with units comment) ---
  k1     1.0            # TODO_units (or "dimensionless")
  k2     1.0            # TODO_units (or "dimensionless")

  # --- Reserved equilibrium constant prefixes (Ka_/Kd_/KD_) ---
  # Ka_bind_XY  1e6      # 1/M
  # Kd_bind_XY  1e-6     # M
  # KD_bind_XY  1e-6     # M
end parameters

begin compartments
  # Compartment documentation goes ABOVE each line.
  # Format: <name> <dimension> <volume_parameter>
  cyt  3  V_cyt  # L
  mem  2  V_mem  # L
end compartments

begin molecule types
  TODO_MOL(site~state)
  # TODO: description / IDs / notes
end molecule types

begin seed species
  # Each seed species amount MUST end with units comment.
  TODO_MOL(site~state)@cyt  0  # molecules
end seed species

begin observables
  # Observable documentation goes ABOVE.
  Molecules  Obs_Tot_TODO   TODO_MOL()
  Molecules  Obs_Key_TODO   TODO_MOL(site~state)
end observables

begin functions
  # Function documentation goes ABOVE.
  # TODO: helper expressions, equilibrium→kinetic mapping, unit conversions, etc.
  fcn_example()  k1*Obs_Tot_TODO
end functions

begin energy patterns
  # Energy patterns documentation goes ABOVE.
  # NOTE: If this block is present, a compartments block MUST also be present.
  #
  # Example form:
  # TODO_PATTERN  -ln(k_on/k_off)
end energy patterns

begin reaction rules
  # Rule documentation goes ABOVE. Avoid inline comments on rule lines.
  #
  # NOTE: Binding/unbinding parameters MUST be single-site constants (§1.3.1).
  #
  # R_example:  TODO_MOL(site) + TODO_MOL(site) <-> TODO_MOL(site!1).TODO_MOL(site!1)  kon_XY, koff_XY
end reaction rules

end model

begin actions
  # If network generation is feasible, include generate_network and all feasible simulate modes.
  # If network generation is not feasible, include only NFsim (nfr).

  generate_network({overwrite=>1})

  simulate({method=>"ode",suffix=>"ode",t_start=>0,t_end=>100,n_steps=>1000})
  simulate({method=>"ssa",suffix=>"ssa",t_start=>0,t_end=>100,n_steps=>1000})
  simulate({method=>"ssa",poplevel=>100,suffix=>"psa",t_start=>0,t_end=>100,n_steps=>1000})
  simulate({method=>"nf",suffix=>"nfr",t_start=>0,t_end=>100,n_steps=>1000,complex=>1})

end actions